CellProfiler Pipeline: http://www.cellprofiler.org
Version:3
DateRevision:20160302210837
GitHash:1b13225
ModuleCount:38
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:3
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression:^(?P<setname>[^\\\\.]+)\\\\s(?P<imnum>\\\\d+)_c(?P<ChannelNumber>[0-9]{1})
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    Extract metadata from:All images
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    Metadata extraction method:Extract from file/folder names
    Metadata source:Folder name
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    Regular expression:(?P<foldername>[^\\\\\\\\/]+)$
    Extract metadata from:All images
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    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression:^(?P<wafflename>waffle)(?P<wafflenum>\\\\d+)
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Match metadata:[{u'dapi': u'foldername', u'mito': u'foldername', u'waffleimage': None, u'actin': u'foldername'}, {u'dapi': u'setname', u'mito': u'setname', u'waffleimage': None, u'actin': u'setname'}, {u'dapi': u'imnum', u'mito': u'imnum', u'waffleimage': None, u'actin': u'imnum'}]
    Image set matching method:Metadata
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    Assignments count:4
    Single images count:0
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    Select the rule criteria:and (metadata does ChannelNumber "1")
    Name to assign these images:dapi
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does ChannelNumber "2")
    Name to assign these images:actin
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does ChannelNumber "3")
    Name to assign these images:mito
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does wafflenum "2")
    Name to assign these images:waffleimage
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:Yes
    grouping metadata count:1
    Metadata category:foldername

Resize:[module_num:5|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
    Select the input image:dapi
    Name the output image:dapi_resized
    Resizing method:Resize by a fraction or multiple of the original size
    Resizing factor:0.25
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    Interpolation method:Nearest Neighbor
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    Additional image count:0

Morph:[module_num:6|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
    Select the input image:dapi_resized
    Name the output image:dapi_resized_morph
    Select the operation to perform:close
    Number of times to repeat operation:Once
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    Diameter:5
    Structuring element:Disk
    X offset:1.0
    Y offset:1.0
    Angle:0.0
    Width:3.0
    Height:3.0
    Custom:5,5,1111111111111111111111111
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
IdentifyPrimaryObjects:[module_num:7|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
    Select the input image:dapi_resized_morph
    Name the primary objects to be identified:Nuclei_resized
    Typical diameter of objects, in pixel units (Min,Max):20,40
    Discard objects outside the diameter range?:No
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
    Size of smoothing filter:90
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    Speed up by using lower-resolution image to find local maxima?:Yes
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    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Retain outlines of the identified objects?:No
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    Handling of objects if excessive number of objects identified:Continue
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    Threshold setting version:2
    Threshold strategy:Global
    Thresholding method:Otsu
    Select the smoothing method for thresholding:Automatic
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    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Three classes
    Minimize the weighted variance or the entropy?:Weighted variance
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
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
ConvertObjectsToImage:[module_num:8|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
    Select the input objects:Nuclei_resized
    Name the output image:Nuclei_resized_image
    Select the color format:Binary (black & white)
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
Resize:[module_num:9|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
    Select the input image:Nuclei_resized_image
    Name the output image:Nuclei_image
    Resizing method:Resize by a fraction or multiple of the original size
    Resizing factor:4
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    Interpolation method:Nearest Neighbor
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    Additional image count:0

IdentifyPrimaryObjects:[module_num:10|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notes:['A convert image to objects module would be helpful.']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
    Select the input image:Nuclei_image
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):20,300
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
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    Suppress local maxima that are closer than this minimum allowed distance:50
    Speed up by using lower-resolution image to find local maxima?:No
    Name the outline image:NucleiOutlines
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:No
    Retain outlines of the identified objects?:Yes
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    Handling of objects if excessive number of objects identified:Continue
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    Threshold setting version:2
    Threshold strategy:Binary image
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    Select binary image:Nuclei_image
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
Morph:[module_num:11|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
    Select the input image:mito
    Name the output image:mito_morph
    Select the operation to perform:close
    Number of times to repeat operation:Once
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    Diameter:10
    Structuring element:Disk
    X offset:1.0
    Y offset:1.0
    Angle:0.0
    Width:3.0
    Height:3.0
    Custom:5,5,1111111111111111111111111
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
Smooth:[module_num:12|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
    Select the input image:mito_morph
    Name the output image:mito_smooth
    Select smoothing method:Gaussian Filter
    Calculate artifact diameter automatically?:No
    Typical artifact diameter:20
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
IdentifySecondaryObjects:[module_num:13|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
    Select the input objects:Nuclei
    Name the objects to be identified:Cells0
    Select the method to identify the secondary objects:Watershed - Image
    Select the input image:mito_smooth
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    Retain outlines of the identified secondary objects?:No
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:2
    Threshold strategy:Global
    Thresholding method:Otsu
    Select the smoothing method for thresholding:No smoothing
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    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Minimize the weighted variance or the entropy?:Weighted variance
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
IdentifySecondaryObjects:[module_num:14|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notes:['The combination of secondary objects is to accomplish the following: First the distribution of the mitochondria is used to define cell boundaries. Second, the actin network is explored to capture cell regions that do not have mitochondria.']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
    Select the input objects:Cells0
    Name the objects to be identified:Cells
    Select the method to identify the secondary objects:Distance - B
    Select the input image:actin
    Number of pixels by which to expand the primary objects:200
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    Name the outline image:CellsOutlines
    Retain outlines of the identified secondary objects?:Yes
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:2
    Threshold strategy:Automatic
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
IdentifySecondaryObjects:[module_num:15|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
    Select the input objects:Nuclei
    Name the objects to be identified:Cells_Round
    Select the method to identify the secondary objects:Distance - N
    Select the input image:actin
    Number of pixels by which to expand the primary objects:100
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    Retain outlines of the identified secondary objects?:No
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
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
IdentifyTertiaryObjects:[module_num:16|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
    Select the larger identified objects:Cells
    Select the smaller identified objects:Nuclei
    Name the tertiary objects to be identified:Cytoplasm
    Name the outline image:CytoplasmOutlines
    Retain outlines of the tertiary objects?:Yes
    Shrink smaller object prior to subtraction?:Yes

IdentifyTertiaryObjects:[module_num:17|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
    Select the larger identified objects:Cells_Round
    Select the smaller identified objects:Nuclei
    Name the tertiary objects to be identified:CytoplasmRound
    Name the outline image:CytoplasmOutlines
    Retain outlines of the tertiary objects?:Yes
    Shrink smaller object prior to subtraction?:Yes

EnhanceOrSuppressFeatures:[module_num:18|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
    Select the input image:mito
    Name the output image:mito_tubeness
    Select the operation:Enhance
    Feature size:10
    Feature type:Neurites
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    Smoothing scale:1
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    Enhancement method:Tubeness
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
ApplyThreshold:[module_num:19|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
    Select the input image:mito_tubeness
    Name the output image:mito_bw
    Select the output image type:Binary (black and white)
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    Threshold setting version:2
    Threshold strategy:Automatic
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
Morph:[module_num:20|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
    Select the input image:mito_bw
    Name the output image:mito_skel
    Select the operation to perform:skel
    Number of times to repeat operation:Forever
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    Diameter:3.0
    Structuring element:Disk
    X offset:1.0
    Y offset:1.0
    Angle:0.0
    Width:3.0
    Height:3.0
    Custom:5,5,1111111111111111111111111
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
ImageMath:[module_num:21|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
    Operation:Multiply
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:mito_grid
    Image or measurement?:Image
    Select the first image:mito_bw
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:waffleimage
    Multiply the second image by:0.5
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
IdentifyPrimaryObjects:[module_num:22|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
    Select the input image:mito_grid
    Name the primary objects to be identified:mito
    Typical diameter of objects, in pixel units (Min,Max):1,20
    Discard objects outside the diameter range?:No
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:None
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    Name the outline image:MitochondriaOutlines
    Fill holes in identified objects?:Never
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    Retain outlines of the identified objects?:Yes
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    Handling of objects if excessive number of objects identified:Continue
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    Threshold setting version:2
    Threshold strategy:Manual
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    Select the smoothing method for thresholding:Automatic
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    Manual threshold:0.5
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
MeasureNeurons:[module_num:23|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
    Select the seed objects:Nuclei
    Select the skeletonized image:mito_skel
    Retain the branchpoint image?:Yes
    Name the branchpoint image:BranchpointImage
    Fill small holes?:Yes
    Maximum hole size:10
    Export the neuron graph relationships?:No
    Intensity image:None
    File output directory:Default Output Folder|
    Vertex file name:vertices.csv
    Edge file name:edges.csv

MeasureObjectRadialDistribution:[module_num:24|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
    Hidden:1
    Hidden:3
    Hidden:2
    Hidden:1
    Select an image to measure:mito_tubeness
    Select objects to measure:Cells
    Object to use as center?:Centers of other objects
    Select objects to use as centers:Nuclei
    Select objects to measure:Cytoplasm
    Object to use as center?:Centers of other objects
    Select objects to use as centers:Nuclei
    Select objects to measure:CytoplasmRound
    Object to use as center?:These objects
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    Scale the bins?:Yes
    Number of bins:16
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    Scale the bins?:No
    Number of bins:20
    Maximum radius:200
    Image:None
    Objects to display:Cytoplasm
    Number of bins:16
    Measurement:Fraction at Distance
    Color map:Default
    Save display as image?:Yes
    Output image name:mito_radial_heatmap

SaveImages:[module_num:25|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
    Select the type of image to save:Image
    Select the image to save:mito_radial_heatmap
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    Select method for constructing file names:Single name
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    Enter single file name:mito_radial_heatmap_\\\\g<imnum>
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    Saved file format:png
    Output file location:Default Output Folder sub-folder|heatmap
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Rescale the images? :No
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    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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
MeasureObjectSizeShape:[module_num:26|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
    Select objects to measure:Cells
    Select objects to measure:Cytoplasm
    Select objects to measure:Nuclei
    Select objects to measure:mito
    Select objects to measure:CytoplasmRound
    Calculate the Zernike features?:No

MeasureObjectIntensity:[module_num:27|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
    Hidden:3
    Select an image to measure:actin
    Select an image to measure:dapi
    Select an image to measure:mito
    Select objects to measure:Cells
    Select objects to measure:Cytoplasm
    Select objects to measure:Nuclei
    Select objects to measure:mito
    Select objects to measure:CytoplasmRound

MeasureTexture:[module_num:28|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
    Hidden:3
    Hidden:4
    Hidden:1
    Select an image to measure:actin
    Select an image to measure:mito
    Select an image to measure:dapi
    Select objects to measure:Cells
    Select objects to measure:Nuclei
    Select objects to measure:Cytoplasm
    Select objects to measure:CytoplasmRound
    Texture scale to measure:8
    Angles to measure:Horizontal,Vertical,Diagonal,Anti-diagonal
    Measure Gabor features?:No
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    Measure images or objects?:Objects

RelateObjects:[module_num:29|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
    Select the input child objects:mito
    Select the input parent objects:Cells
    Calculate child-parent distances?:Centroid
    Calculate per-parent means for all child measurements?:Yes
    Calculate distances to other parents?:No
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
OverlayOutlines:[module_num:30|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:mito
    Name the output image:Mito2Overlay
    Outline display mode:Color
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    Width of outlines:2
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    Select outline color:Red
    Load outlines from an image or objects?:Objects
    Select objects to display:mito
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    Select outline color:cyan
    Load outlines from an image or objects?:Objects
    Select objects to display:Nuclei
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    Select outline color:yellow
    Load outlines from an image or objects?:Objects
    Select objects to display:Cells

DisplayDataOnImage:[module_num:31|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
    Display object or image measurements?:Object
    Select the input objects:Nuclei
    Measurement to display:Number_Object_Number
    Select the image on which to display the measurements:Mito2Overlay
    Text color:#80FF80
    Name the output image that has the measurements displayed:CountCells
    Font size (points):20
    Number of decimals:0
    Image elements to save:Image
    Annotation offset (in pixels):0
    Display mode:Text
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    Display background image?:Yes
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
RescaleIntensity:[module_num:32|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
    Select the input image:actin
    Name the output image:actin_dim
    Rescaling method:Divide each image by the same value
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    Divisor value:1.5
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
GrayToColor:[module_num:33|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
    Select a color scheme:RGB
    Select the image to be colored red:mito
    Select the image to be colored green:actin_dim
    Select the image to be colored blue:dapi
    Name the output image:ColorImage
    Relative weight for the red image:1.0
    Relative weight for the green image:1.0
    Relative weight for the blue image:1.0
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
DisplayDataOnImage:[module_num:34|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
    Display object or image measurements?:Object
    Select the input objects:Nuclei
    Measurement to display:Number_Object_Number
    Select the image on which to display the measurements:ColorImage
    Text color:#F7FF21
    Name the output image that has the measurements displayed:CountCells2
    Font size (points):20
    Number of decimals:0
    Image elements to save:Image
    Annotation offset (in pixels):0
    Display mode:Text
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    Display background image?:Yes
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
SaveImages:[module_num:35|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
    Select the type of image to save:Image
    Select the image to save:CountCells
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    Select method for constructing file names:From image filename
    Select image name for file prefix:mito
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_CountCells_\\\\g<imnum>
    Saved file format:png
    Output file location:Default Output Folder sub-folder|images_countnuclei
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Rescale the images? :No
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    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:36|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
    Select the type of image to save:Image
    Select the image to save:CountCells2
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    Select method for constructing file names:From image filename
    Select image name for file prefix:actin
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_CountCells2_\\\\g<imnum>
    Saved file format:png
    Output file location:Default Output Folder sub-folder|images_countnuclei2
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Rescale the images? :No
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    Select colormap:Spectral
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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
ExportToSpreadsheet:[module_num:37|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Limit output to a size that is allowed in Excel?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    :Cytoplasm|Parent_Cells,Cytoplasm|Parent_Nuclei,Cytoplasm|Intensity_MassDisplacement_dapi,Cytoplasm|Intensity_MassDisplacement_mito,Cytoplasm|Intensity_MassDisplacement_actin,Cytoplasm|Intensity_MinIntensity_dapi,Cytoplasm|Intensity_MinIntensity_mito,Cytoplasm|Intensity_MinIntensity_actin,Cytoplasm|Intensity_StdIntensity_dapi,Cytoplasm|Intensity_StdIntensity_mito,Cytoplasm|Intensity_StdIntensity_actin,Cytoplasm|Intensity_IntegratedIntensityEdge_dapi,Cytoplasm|Intensity_IntegratedIntensityEdge_mito,Cytoplasm|Intensity_IntegratedIntensityEdge_actin,Cytoplasm|Intensity_UpperQuartileIntensity_dapi,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:analysis_
    Overwrite existing files without warning?:No
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
CreateBatchFiles:[module_num:38|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
    Store batch files in default output folder?:Yes
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    Are the cluster computers running Windows?:No
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    Launch BatchProfiler:No
