CellProfiler Pipeline: http://www.cellprofiler.org
Version:3
DateRevision:300
GitHash:
ModuleCount:40
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:3
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<setname>[^\\\\.]+)\\\\s(?P<imnum>\\\\d+)_c(?P<ChannelNumber>[0-9]{1})
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    Extract metadata from:All images
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    Metadata extraction method:Extract from file/folder names
    Metadata source:Folder name
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    Regular expression to extract from folder name:(?P<foldername>[^\\\\\\\\/]+)$
    Extract metadata from:All images
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    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<wafflename>waffle)(?P<wafflenum>\\\\d+)
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Match metadata:[{u'dapi': u'foldername', u'mito': u'foldername', u'waffleimage': None, u'actin': u'foldername'}, {u'dapi': u'setname', u'mito': u'setname', u'waffleimage': None, u'actin': u'setname'}, {u'dapi': u'imnum', u'mito': u'imnum', u'waffleimage': None, u'actin': u'imnum'}]
    Image set matching method:Metadata
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    Assignments count:4
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (metadata does ChannelNumber "1")
    Name to assign these images:dapi
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does ChannelNumber "2")
    Name to assign these images:actin
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does ChannelNumber "3")
    Name to assign these images:mito
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does wafflenum "2")
    Name to assign these images:waffleimage
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:Yes
    grouping metadata count:1
    Metadata category:foldername

Resize:[module_num:5|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notes:['The nuclei in these images are large enough, covering an area with a large number of pixels, that the segmentation methods used with CellProfiler have a tendency to oversegment. This is especially true due to the heterogeneity of the nuclear stain. Downsampling the image reduces the number of pixels and simultaneously has a smoothing effect on the nuclei.']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
    Select the input image:dapi
    Name the output image:dapi_resized
    Resizing method:Resize by a fraction or multiple of the original size
    Resizing factor:0.25
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    Interpolation method:Nearest Neighbor
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    Additional image count:0

Closing:[module_num:6|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notes:['The downsampled nuclei still retain enough heterogeneity that an additional smoothing step is required for clean segmentation. Closing is chosen, because it will "amplify" the bright spots within a nucleus and use these intensities to replace the more dim parts of the nucleus.']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
    Select the input image:dapi_resized
    Name the output image:dapi_resized_morph
    Structuring element:disk,5

IdentifyPrimaryObjects:[module_num:7|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notes:['The nuclei are identified using a watershed approach. ']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
    Select the input image:dapi_resized_morph
    Name the primary objects to be identified:Nuclei_resized
    Typical diameter of objects, in pixel units (Min,Max):10,80
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Intensity
    Size of smoothing filter:90
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:9
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Three classes
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
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
ResizeObjects:[module_num:8|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notes:['To make measurements and define cell boundaries, the nuclei will be used as seeds for further segmentation. The original image size will be used for the measurements and secondary objects, so the nuclei found in the resized image will be resized again to their original proportions.']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
    Select the input object:Nuclei_resized
    Name the output object:Nuclei
    Method:Factor
    Factor:4
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
ExpandOrShrinkObjects:[module_num:9|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notes:['The segmented nuclei do not always overlap with the mitochondria, so the borders of the nuclei are expanded a small measure to increase the likelihood these two regions will overlap. We want the nuclei to overlap with the mitochondria, because the mitochondria gives the best sense of the shape of the cell.']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
    Select the input objects:Nuclei
    Name the output objects:Nuclei_expand
    Select the operation:Expand objects by a specified number of pixels
    Number of pixels by which to expand or shrink:10
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
Closing:[module_num:10|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notes:['The mitochondria give a good sense of the cell boundaries and have give a higher confidence in the cell shape compared to the actin. However, the mitochondria are punctate, so a closing operation is used to smooth the mitochondria for use in segmentation.']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
    Select the input image:mito
    Name the output image:mito_morph
    Structuring element:disk,10

Smooth:[module_num:11|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notes:['The closed mito image is not smooth enough for segmentation, so additional smoothing is added. Guassian filtering is done after closing to smooth the "rough edges" created by the closing operation that can lead to artificial boundaries in secondary segmentation.']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
    Select the input image:mito_morph
    Name the output image:mito_smooth
    Select smoothing method:Gaussian Filter
    Calculate artifact diameter automatically?:No
    Typical artifact diameter:20
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
IdentifySecondaryObjects:[module_num:12|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notes:['The actin channel defines the outer boundary of cells clearly, but the boudaries between cells can be difficult to discern. Therefore, using the mitochondria channel to extend the segmentation past the nucleus is performed first. The mitochondria do not often reach the cell boundaries shown by actin, so this step is an intermediate step in the segmentation ']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
    Select the input objects:Nuclei_expand
    Name the objects to be identified:Cells_mito
    Select the method to identify the secondary objects:Watershed - Image
    Select the input image:mito_smooth
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    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:9
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
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
IdentifySecondaryObjects:[module_num:13|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notes:['The combination of secondary objects is to accomplish the following: First the distribution of the mitochondria is used to define cell boundaries. Second, the actin network is explored to capture cell regions that do not have mitochondria.']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
    Select the input objects:Cells_mito
    Name the objects to be identified:Cells
    Select the method to identify the secondary objects:Distance - B
    Select the input image:actin
    Number of pixels by which to expand the primary objects:250
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    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:9
    Threshold strategy:Global
    Thresholding method:Minimum cross entropy
    Threshold smoothing scale:1.3488
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.0, 1.0
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
IdentifySecondaryObjects:[module_num:14|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notes:['To hedge against the accurate segmentation of the cell boundary, a radius around the nuclei will be measured for mitochondia distribution. The first 100 pixels around the nucleus are chosen, because a majority of the mitochondria appears to reside within this radius. The "round cells" will add an extra measurement that can be used to evaluate and complement the segmentation based on the actin channel.']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
    Select the input objects:Nuclei
    Name the objects to be identified:Cells_Round
    Select the method to identify the secondary objects:Distance - N
    Select the input image:actin
    Number of pixels by which to expand the primary objects:100
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    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
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
IdentifyTertiaryObjects:[module_num:15|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notes:['The cytoplasm is the region past the nuclei and within the cell boundaries.']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
    Select the larger identified objects:Cells
    Select the smaller identified objects:Nuclei
    Name the tertiary objects to be identified:Cytoplasm
    Shrink smaller object prior to subtraction?:Yes

IdentifyTertiaryObjects:[module_num:16|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notes:['The cytoplasm-round applies to the expanded nuclei instead of the actin defined cell boundary.']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
    Select the larger identified objects:Cells_Round
    Select the smaller identified objects:Nuclei
    Name the tertiary objects to be identified:CytoplasmRound
    Shrink smaller object prior to subtraction?:Yes

EnhanceOrSuppressFeatures:[module_num:17|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notes:['The mitochondria signal is often dim. To enhance the precence of mitochondria and diminish the importance of their absolute intensity the tubeness filter is applied to the mitochondria channel.']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
    Select the input image:mito
    Name the output image:mito_tubeness
    Select the operation:Enhance
    Feature size:10
    Feature type:Neurites
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    Smoothing scale:1
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    Enhancement method:Tubeness
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
Threshold:[module_num:18|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notes:['Thresholding the mitochondria will allow the measurement of their positioning.']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
    Select the input image:mito_tubeness
    Name the output image:mito_bw
    Threshold strategy:Global
    Thresholding method:Minimum cross entropy
    Threshold smoothing scale:1.3488
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.0, 1.0
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
MorphologicalSkeleton:[module_num:19|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notes:['Transforming the mitochondria into a skeletonized mesh will treat the mitochondria as a network and provide the measurement of features specific to networks, such as statistics about branches.']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
    Select the input image:mito_bw
    Name the output image:mito_skel

MeasureObjectSkeleton:[module_num:20|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notes:['Aspects unique to skeletonized images and networks are quantified.']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
    Select the seed objects:Nuclei
    Select the skeletonized image:mito_skel
    Retain the branchpoint image?:Yes
    Name the branchpoint image:BranchpointImage
    Fill small holes?:Yes
    Maximum hole size:10
    Export the skeleton graph relationships?:No
    Intensity image:mito_tubeness
    File output directory:Default Output Folder|mito_network
    Vertex file name:vertices.csv
    Edge file name:edges.csv

ImageMath:[module_num:21|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notes:['The "waffle image" was created to analyze the mitochondria on a grid that is larger than a pixel, but smaller than the compartments defined by the cell segmentation. Image math imposes the grid upon the image.']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
    Operation:Multiply
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:mito_grid
    Image or measurement?:Image
    Select the first image:mito_bw
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:waffleimage
    Multiply the second image by:0.5
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
IdentifyPrimaryObjects:[module_num:22|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notes:['The mitochondria are segmented across the grid.']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
    Select the input image:mito_grid
    Name the primary objects to be identified:mito
    Typical diameter of objects, in pixel units (Min,Max):1,20
    Discard objects outside the diameter range?:No
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:Never
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    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:9
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:1.3488
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    Manual threshold:0.5
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
MeasureObjectIntensityDistribution:[module_num:23|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notes:['One way to measure distribution of mitochondria is by quantifying the intensity of the mitochondria in rings that are concentric with the nucleus.']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
    Hidden:1
    Hidden:3
    Hidden:1
    Hidden:1
    Calculate intensity Zernikes?:None
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    Select an image to measure:mito_tubeness
    Select objects to measure:Cells
    Object to use as center?:Centers of other objects
    Select objects to use as centers:Nuclei
    Select objects to measure:Cytoplasm
    Object to use as center?:Centers of other objects
    Select objects to use as centers:Nuclei
    Select objects to measure:CytoplasmRound
    Object to use as center?:These objects
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    Scale the bins?:Yes
    Number of bins:16
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    Image:None
    Objects to display:Cytoplasm
    Number of bins:16
    Measurement:Fraction at Distance
    Color map:Default
    Save display as image?:Yes
    Output image name:mito_radial_heatmap

MeasureObjectIntensityDistribution:[module_num:24|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
    Hidden:1
    Hidden:3
    Hidden:1
    Hidden:1
    Calculate intensity Zernikes?:None
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    Select an image to measure:mito_tubeness
    Select objects to measure:Cells
    Object to use as center?:Centers of other objects
    Select objects to use as centers:Nuclei
    Select objects to measure:Cytoplasm
    Object to use as center?:Centers of other objects
    Select objects to use as centers:Nuclei
    Select objects to measure:CytoplasmRound
    Object to use as center?:These objects
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    Scale the bins?:No
    Number of bins:16
    Maximum radius:100
    Image:None
    Objects to display:Cytoplasm
    Number of bins:16
    Measurement:Fraction at Distance
    Color map:Default
    Save display as image?:Yes
    Output image name:mito_radial_heatmap_unscaled

SaveImages:[module_num:25|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notes:['Save the visualization of the "rings" around the nuclei.']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
    Select the type of image to save:Image
    Select the image to save:mito_radial_heatmap
    Select method for constructing file names:Single name
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    Enter single file name:mito_radial_heatmap_\\\\g<imnum>
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    Saved file format:png
    Output file location:Default Output Folder sub-folder|heatmap
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:26|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
    Select the type of image to save:Image
    Select the image to save:mito_radial_heatmap_unscaled
    Select method for constructing file names:Single name
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    Enter single file name:mito_radial_heatmap_unscaled_\\\\g<imnum>
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    Saved file format:png
    Output file location:Default Output Folder sub-folder|heatmap
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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
MeasureRadialEntropy:[module_num:27|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notes:['Another way to measure distribution is the measure the entropy of the mitochondria intensities within wedges that circle the nucleus, like slices of a pizza.']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enabled:False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
    Select an image to measure:mito_tubeness
    Select objects to measure:Cells
    Which intensity measurement should be used?:Integrated
    Input number of bins:16

MeasureRadialEntropy:[module_num:28|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notes:['Another way to measure distribution is the measure the entropy of the mitochondria intensities within wedges that circle the nucleus, like slices of a pizza.']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enabled:False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
    Select an image to measure:mito_tubeness
    Select objects to measure:Cells_Round
    Which intensity measurement should be used?:Mean
    Input number of bins:16

MeasureObjectSizeShape:[module_num:29|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notes:['The distribution of mitochondria could have a relationship to the shape of the cell or nucleus, so these aspects of the cells are also quantified.']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
    Select objects to measure:Cells
    Select objects to measure:Cytoplasm
    Select objects to measure:Nuclei
    Select objects to measure:mito
    Select objects to measure:CytoplasmRound
    Select objects to measure:Cells_mito
    Calculate the Zernike features?:No

MeasureObjectIntensity:[module_num:30|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notes:['The intensity of the mitochondria, or other measured channels, could also have significance, so these too are measured. The dapi channel and actin channel can also be used to detect segmentation errors.']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
    Hidden:3
    Select an image to measure:actin
    Select an image to measure:dapi
    Select an image to measure:mito
    Select objects to measure:Cells
    Select objects to measure:Cytoplasm
    Select objects to measure:Nuclei
    Select objects to measure:mito
    Select objects to measure:CytoplasmRound

MeasureTexture:[module_num:31|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notes:['The mitochondria, being punctate, are good candidates for providing information through texture measurements.']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
    Hidden:3
    Hidden:4
    Hidden:3
    Select an image to measure:actin
    Select an image to measure:mito
    Select an image to measure:dapi
    Select objects to measure:Cells
    Select objects to measure:Nuclei
    Select objects to measure:Cytoplasm
    Select objects to measure:CytoplasmRound
    Texture scale to measure:8
    Texture scale to measure:4
    Texture scale to measure:16
    Measure images or objects?:Objects

RelateObjects:[module_num:32|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
    Parent objects:Cells
    Child objects:mito
    Calculate child-parent distances?:Centroid
    Calculate per-parent means for all child measurements?:Yes
    Calculate distances to other parents?:No
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
OverlayOutlines:[module_num:33|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:mito
    Name the output image:Mito2Overlay
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:Red
    Select objects to display:mito
    Select outline color:cyan
    Select objects to display:Nuclei
    Select outline color:yellow
    Select objects to display:Cells

DisplayDataOnImage:[module_num:34|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
    Display object or image measurements?:Object
    Select the input objects:Nuclei
    Measurement to display:Number_Object_Number
    Select the image on which to display the measurements:Mito2Overlay
    Text color:#80FF80
    Name the output image that has the measurements displayed:CountCells
    Font size (points):20
    Number of decimals:0
    Image elements to save:Image
    Annotation offset (in pixels):0
    Display mode:Text
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    Display background image?:Yes
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
RescaleIntensity:[module_num:35|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
    Select the input image:actin
    Name the output image:actin_dim
    Rescaling method:Divide each image by the same value
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    Divisor value:1.5
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
GrayToColor:[module_num:36|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
    Select a color scheme:RGB
    Select the image to be colored red:mito
    Select the image to be colored green:actin_dim
    Select the image to be colored blue:dapi
    Name the output image:ColorImage
    Relative weight for the red image:1.0
    Relative weight for the green image:1.0
    Relative weight for the blue image:1.0
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
DisplayDataOnImage:[module_num:37|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
    Display object or image measurements?:Object
    Select the input objects:Nuclei
    Measurement to display:Number_Object_Number
    Select the image on which to display the measurements:ColorImage
    Text color:#F7FF21
    Name the output image that has the measurements displayed:CountCells2
    Font size (points):20
    Number of decimals:0
    Image elements to save:Image
    Annotation offset (in pixels):0
    Display mode:Text
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    Display background image?:Yes
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
SaveImages:[module_num:38|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
    Select the type of image to save:Image
    Select the image to save:CountCells
    Select method for constructing file names:From image filename
    Select image name for file prefix:mito
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_CountCells_\\\\g<imnum>
    Saved file format:png
    Output file location:Default Output Folder sub-folder|images_countnuclei
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:39|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
    Select the type of image to save:Image
    Select the image to save:CountCells2
    Select method for constructing file names:From image filename
    Select image name for file prefix:actin
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_CountCells2_\\\\g<imnum>
    Saved file format:png
    Output file location:Default Output Folder sub-folder|images_countnuclei2
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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
ExportToSpreadsheet:[module_num:40|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:_analysis
    Overwrite existing files without warning?:Yes
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