CellProfiler Pipeline: http://www.cellprofiler.org
Version:3
DateRevision:20160418141927
GitHash:9969f42
ModuleCount:22
HasImagePlaneDetails:False

LoadData:[module_num:1|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
    Input data file location:Default Input Folder sub-folder|work/projects/2015_10_05_DrugRepurposing_AravindSubramanian_GolubLab_Broad/workspace/load_data_csv/2016_04_01_a549_48hr_batch1/SQ00015116
    Name of the file:load_data_with_illum.csv
    Load images based on this data?:Yes
    Base image location:Default Input Folder|
    Process just a range of rows?:No
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    Group images by metadata?:Yes
    Select metadata tags for grouping:Plate,Well
    Rescale intensities?:Yes

CorrectIlluminationApply:[module_num:2|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
    Select the input image:OrigDNA
    Name the output image:DNA
    Select the illumination function:IllumDNA
    Select how the illumination function is applied:Divide
    Select the input image:OrigAGP
    Name the output image:AGP
    Select the illumination function:IllumAGP
    Select how the illumination function is applied:Divide
    Select the input image:OrigMito
    Name the output image:Mito
    Select the illumination function:IllumMito
    Select how the illumination function is applied:Divide
    Select the input image:OrigRNA
    Name the output image:RNA
    Select the illumination function:IllumRNA
    Select how the illumination function is applied:Divide

IdentifyPrimaryObjects:[module_num:3|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
    Select the input image:DNA
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):20,240
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
    Size of smoothing filter:16
    Suppress local maxima that are closer than this minimum allowed distance:16
    Speed up by using lower-resolution image to find local maxima?:Yes
    Name the outline image:NucleiOutlines
    Fill holes in identified objects?:Never
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:No
    Retain outlines of the identified objects?:Yes
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    Handling of objects if excessive number of objects identified:Continue
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    Threshold setting version:1
    Threshold strategy:Global
    Thresholding method:Otsu
    Select the smoothing method for thresholding:Automatic
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    Threshold correction factor:1
    Lower and upper bounds on threshold:0.01,1.0
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    Two-class or three-class thresholding?:Two classes
    Minimize the weighted variance or the entropy?:Weighted variance
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
IdentifySecondaryObjects:[module_num:4|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
    Select the input objects:Nuclei
    Name the objects to be identified:Cells
    Select the method to identify the secondary objects:Watershed - Image
    Select the input image:RNA
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    Name the outline image:CellOutlines
    Retain outlines of the identified secondary objects?:Yes
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:1
    Threshold strategy:Global
    Thresholding method:Otsu
    Select the smoothing method for thresholding:No smoothing
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    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.004,1.0
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    Two-class or three-class thresholding?:Three classes
    Minimize the weighted variance or the entropy?:Weighted variance
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
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
IdentifyTertiaryObjects:[module_num:5|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
    Select the larger identified objects:Cells
    Select the smaller identified objects:Nuclei
    Name the tertiary objects to be identified:Cytoplasm
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    Retain outlines of the tertiary objects?:No
    Shrink smaller object prior to subtraction?:Yes

Morph:[module_num:6|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
    Select the input image:Mito
    Name the output image:mito_morph
    Select the operation to perform:close
    Number of times to repeat operation:Once
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    Diameter:10
    Structuring element:Disk
    X offset:1.0
    Y offset:1.0
    Angle:0.0
    Width:3.0
    Height:3.0
    Custom:5,5,1111111111111111111111111
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
Smooth:[module_num:7|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
    Select the input image:mito_morph
    Name the output image:mito_smooth
    Select smoothing method:Gaussian Filter
    Calculate artifact diameter automatically?:No
    Typical artifact diameter:20
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
IdentifySecondaryObjects:[module_num:8|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
    Select the input objects:Nuclei
    Name the objects to be identified:Cells0
    Select the method to identify the secondary objects:Watershed - Image
    Select the input image:mito_smooth
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    Retain outlines of the identified secondary objects?:No
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:2
    Threshold strategy:Global
    Thresholding method:Otsu
    Select the smoothing method for thresholding:No smoothing
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    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Minimize the weighted variance or the entropy?:Weighted variance
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
EnhanceOrSuppressFeatures:[module_num:9|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
    Select the input image:Mito
    Name the output image:mito_tubeness
    Select the operation:Enhance
    Feature size:10
    Feature type:Neurites
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    Smoothing scale:1
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    Enhancement method:Tubeness
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
ApplyThreshold:[module_num:10|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
    Select the input image:mito_tubeness
    Name the output image:mito_bw
    Select the output image type:Binary (black and white)
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    Threshold setting version:2
    Threshold strategy:Automatic
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
Morph:[module_num:11|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
    Select the input image:mito_bw
    Name the output image:mito_skel
    Select the operation to perform:skel
    Number of times to repeat operation:Forever
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    Diameter:3.0
    Structuring element:Disk
    X offset:1.0
    Y offset:1.0
    Angle:0.0
    Width:3.0
    Height:3.0
    Custom:5,5,1111111111111111111111111
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
MeasureNeurons:[module_num:12|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
    Select the seed objects:Nuclei
    Select the skeletonized image:mito_skel
    Retain the branchpoint image?:No
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    Fill small holes?:Yes
    Maximum hole size:10
    Export the neuron graph relationships?:No
    Intensity image:None
    File output directory:Default Output Folder|
    Vertex file name:vertices.csv
    Edge file name:edges.csv

MeasureObjectIntensityDistribution:[module_num:13|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notes:['We selected 80  because it is the 99th percentile of the maximumRadius feature in the drug repurposing dataset (A549) The correspnding value for 99th percentile for fibroblast in the mito project was 200']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
    Hidden:1
    Hidden:2
    Hidden:2
    Hidden:0
    Calculate intensity Zernikes?:None
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    Select an image to measure:mito_tubeness
    Select objects to measure:Cells
    Object to use as center?:These objects
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    Select objects to measure:Cytoplasm
    Object to use as center?:These objects
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    Scale the bins?:Yes
    Number of bins:16
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    Scale the bins?:No
    Number of bins:20
    Maximum radius:80

MeasureObjectIntensity:[module_num:14|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
    Hidden:3
    Select an image to measure:DNA
    Select an image to measure:AGP
    Select an image to measure:Mito
    Select objects to measure:Nuclei
    Select objects to measure:Cytoplasm
    Select objects to measure:Cells

MeasureObjectSizeShape:[module_num:15|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
    Select objects to measure:Cells
    Select objects to measure:Nuclei
    Select objects to measure:Cytoplasm
    Calculate the Zernike features?:No

MeasureTexture:[module_num:16|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
    Hidden:3
    Hidden:3
    Hidden:1
    Select an image to measure:DNA
    Select an image to measure:AGP
    Select an image to measure:Mito
    Select objects to measure:Cells
    Select objects to measure:Cytoplasm
    Select objects to measure:Nuclei
    Texture scale to measure:8
    Angles to measure:Horizontal,Vertical,Diagonal,Anti-diagonal
    Measure Gabor features?:No
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    Measure images or objects?:Objects

OverlayOutlines:[module_num:17|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
    Display outlines on a blank image?:Yes
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    Name the output image:NucleiOutlines
    Outline display mode:Grayscale
    Select method to determine brightness of outlines:Max of image
    Width of outlines:1
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    Load outlines from an image or objects?:Objects
    Select objects to display:Nuclei

OverlayOutlines:[module_num:18|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
    Display outlines on a blank image?:Yes
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    Name the output image:CellOutlines
    Outline display mode:Grayscale
    Select method to determine brightness of outlines:Max of image
    Width of outlines:1
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    Load outlines from an image or objects?:Objects
    Select objects to display:Cells

SaveImages:[module_num:19|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
    Select the type of image to save:Image
    Select the image to save:NucleiOutlines
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    Select method for constructing file names:Single name
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    Enter single file name:\\\\g<Well>_s\\\\g<Site>--nuclei_outlines
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    Saved file format:png
    Output file location:Default Output Folder sub-folder|outlines
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Rescale the images? :No
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    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:20|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
    Select the type of image to save:Image
    Select the image to save:CellOutlines
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    Select method for constructing file names:Single name
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    Enter single file name:\\\\g<Well>_s\\\\g<Site>--cell_outlines
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    Saved file format:png
    Output file location:Default Output Folder sub-folder|outlines
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Rescale the images? :No
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    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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
ExportToSpreadsheet:[module_num:21|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Limit output to a size that is allowed in Excel?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder sub-folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:Yes
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
CreateBatchFiles:[module_num:22|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enabled:False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
    Store batch files in default output folder?:Yes
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    Are the cluster computers running Windows?:No
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    Launch BatchProfiler:No
