CellProfiler Pipeline: http://www.cellprofiler.org
Version:3
DateRevision:300
GitHash:
ModuleCount:32
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<MyDate>.*)_(?P<Experiment>.*)_D(?P<DiffDay>[0-9]+)_(?P<Subject>[0-9]+)_(?P<Field>[0-9]+)_c(?P<mychan>[0-9])
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:3
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (metadata does mychan "1")
    Name to assign these images:mdp
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does mychan "2")
    Name to assign these images:dna
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does mychan "3")
    Name to assign these images:o4
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
Resize:[module_num:5|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notes:['Smooth dna image and speed up processing']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
    Select the input image:dna
    Name the output image:ResizeDownDna
    Resizing method:Resize by a fraction or multiple of the original size
    Resizing factor:0.25
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    Interpolation method:Nearest Neighbor
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    Additional image count:0

Opening:[module_num:6|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notes:['Opening finds the background behind the nuclei.']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
    Select the input image:ResizeDownDna
    Name the output image:OpeningDna
    Structuring element:disk,25

Resize:[module_num:7|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
    Select the input image:OpeningDna
    Name the output image:ResizeUpDna
    Resizing method:Resize by a fraction or multiple of the original size
    Resizing factor:4
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    Interpolation method:Nearest Neighbor
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    Additional image count:0

GaussianFilter:[module_num:8|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notes:['Smooth the background finding operation, i.e. the output of the opening module.']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
    Select the input image:ResizeUpDna
    Name the output image:dnaBackground
    Sigma:35

SaveImages:[module_num:9|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
    Select the type of image to save:Image
    Select the image to save:dnaBackground
    Select method for constructing file names:From image filename
    Select image name for file prefix:dna
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_background
    Saved file format:png
    Output file location:Default Output Folder sub-folder|background_images
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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
MeasureImageIntensity:[module_num:10|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
    Select the image to measure:dnaBackground
    Measure the intensity only from areas enclosed by objects?:No
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
ImageMath:[module_num:11|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notes:['Find fold change between all pixels and the "dimmest" pixel.']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
    Operation:Divide
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:No
    Set values greater than 1 equal to 1?:No
    Ignore the image masks?:No
    Name the output image:dnaBackgroundNormalized
    Image or measurement?:Image
    Select the first image:dnaBackground
    Multiply the first image by:1.0
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    Image or measurement?:Measurement
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    Multiply the second image by:1.0
    Measurement:Intensity_MinIntensity_dnaBackground

ImageMath:[module_num:12|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notes:['Negatively weight the brighter pixels, such that they will have the same intensity as the dimmest pixel.']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
    Operation:Divide
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:dnaCorrected
    Image or measurement?:Image
    Select the first image:dna
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:dnaBackgroundNormalized
    Multiply the second image by:1.0
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
Resize:[module_num:13|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
    Select the input image:mdp
    Name the output image:ResizeDownMdp
    Resizing method:Resize by a fraction or multiple of the original size
    Resizing factor:0.25
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    Interpolation method:Nearest Neighbor
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    Additional image count:0

Opening:[module_num:14|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
    Select the input image:ResizeDownMdp
    Name the output image:OpeningMdp
    Structuring element:disk,25

Resize:[module_num:15|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
    Select the input image:OpeningMdp
    Name the output image:ResizeUpMdp
    Resizing method:Resize by a fraction or multiple of the original size
    Resizing factor:4
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    Interpolation method:Nearest Neighbor
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    Additional image count:0

GaussianFilter:[module_num:16|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
    Select the input image:ResizeUpMdp
    Name the output image:mdpBackground
    Sigma:35

SaveImages:[module_num:17|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
    Select the type of image to save:Image
    Select the image to save:mdpBackground
    Select method for constructing file names:From image filename
    Select image name for file prefix:mdp
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_background
    Saved file format:png
    Output file location:Default Output Folder sub-folder|background_images
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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
MeasureImageIntensity:[module_num:18|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
    Select the image to measure:mdpBackground
    Measure the intensity only from areas enclosed by objects?:No
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
ImageMath:[module_num:19|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
    Operation:Divide
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:No
    Set values greater than 1 equal to 1?:No
    Ignore the image masks?:No
    Name the output image:mdpBackgroundNormalized
    Image or measurement?:Image
    Select the first image:mdpBackground
    Multiply the first image by:1.0
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    Image or measurement?:Measurement
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    Multiply the second image by:1.0
    Measurement:Intensity_MinIntensity_mdpBackground

ImageMath:[module_num:20|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
    Operation:Divide
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:mdpCorrected
    Image or measurement?:Image
    Select the first image:mdp
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:mdpBackgroundNormalized
    Multiply the second image by:1.0
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
Resize:[module_num:21|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
    Select the input image:o4
    Name the output image:ResizeDowno4
    Resizing method:Resize by a fraction or multiple of the original size
    Resizing factor:0.25
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    Interpolation method:Nearest Neighbor
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    Additional image count:0

Opening:[module_num:22|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
    Select the input image:ResizeDowno4
    Name the output image:Openingo4
    Structuring element:disk,25

Resize:[module_num:23|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
    Select the input image:Openingo4
    Name the output image:ResizeUpo4
    Resizing method:Resize by a fraction or multiple of the original size
    Resizing factor:4
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    Interpolation method:Nearest Neighbor
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    Additional image count:0

GaussianFilter:[module_num:24|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
    Select the input image:ResizeUpo4
    Name the output image:o4Background
    Sigma:35

SaveImages:[module_num:25|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
    Select the type of image to save:Image
    Select the image to save:o4Background
    Select method for constructing file names:From image filename
    Select image name for file prefix:o4
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_background
    Saved file format:png
    Output file location:Default Output Folder sub-folder|background_images
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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
MeasureImageIntensity:[module_num:26|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
    Select the image to measure:o4Background
    Measure the intensity only from areas enclosed by objects?:No
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
ImageMath:[module_num:27|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
    Operation:Divide
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:No
    Set values greater than 1 equal to 1?:No
    Ignore the image masks?:No
    Name the output image:o4BackgroundNormalized
    Image or measurement?:Image
    Select the first image:o4Background
    Multiply the first image by:1.0
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    Image or measurement?:Measurement
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    Multiply the second image by:1.0
    Measurement:Intensity_MinIntensity_o4Background

ImageMath:[module_num:28|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
    Operation:Divide
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:o4Corrected
    Image or measurement?:Image
    Select the first image:o4
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:o4BackgroundNormalized
    Multiply the second image by:1.0
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
IdentifyPrimaryObjects:[module_num:29|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
    Select the input image:dnaCorrected
    Name the primary objects to be identified:nuclei
    Typical diameter of objects, in pixel units (Min,Max):10,40
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Intensity
    Size of smoothing filter:1
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    Speed up by using lower-resolution image to find local maxima?:No
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Minimum cross entropy
    Threshold smoothing scale:1.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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
MeasureObjectIntensity:[module_num:30|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
    Hidden:3
    Select an image to measure:o4Corrected
    Select an image to measure:mdpCorrected
    Select an image to measure:dnaCorrected
    Select objects to measure:nuclei

MeasureObjectSizeShape:[module_num:31|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
    Select objects to measure:nuclei
    Calculate the Zernike features?:Yes

ExportToSpreadsheet:[module_num:32|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:oligodendrocytes_
    Overwrite existing files without warning?:Yes
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