CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:425
GitHash:
ModuleCount:30
HasImagePlaneDetails:False

LoadData:[module_num:1|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
    Input data file location:Default Input Folder|Desktop\\load_data_csv\\2021_03_30_Horizon\\BR00121482
    Name of the file:load_data56.csv
    Load images based on this data?:Yes
    Base image location:None|
    Process just a range of rows?:No
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    Group images by metadata?:Yes
    Select metadata tags for grouping:SetName,ImageNumber
    Rescale intensities?:Yes

IdentifyPrimaryObjects:[module_num:2|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notes:['Identifies ALL nuclei in image though we will only take measurements on those NOT touching the border of the image (filtered at a later step)']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
    Select the input image:DNA
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):50,300
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Intensity
    Size of smoothing filter:10
    Suppress local maxima that are closer than this minimum allowed distance:8
    Speed up by using lower-resolution image to find local maxima?:No
    Fill holes in identified objects?:After declumping only
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:No
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:1
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.005,1
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    Log transform before thresholding?:No
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
IdentifySecondaryObjects:[module_num:3|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notes:['']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
    Select the input objects:Nuclei
    Name the objects to be identified:PreCells
    Select the method to identify the secondary objects:Watershed - Image
    Select the input image:Mito
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    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0
    Threshold correction factor:0.8
    Lower and upper bounds on threshold:0.005,.06
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:Yes
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
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
IdentifySecondaryObjects:[module_num:4|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
    Select the input objects:PreCells
    Name the objects to be identified:Cells
    Select the method to identify the secondary objects:Distance - B
    Select the input image:Actin
    Number of pixels by which to expand the primary objects:100
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    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:0.0
    Threshold correction factor:.8
    Lower and upper bounds on threshold:0.0,1.0
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    Log transform before thresholding?:No
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
IdentifyTertiaryObjects:[module_num:5|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
    Select the larger identified objects:Cells
    Select the smaller identified objects:Nuclei
    Name the tertiary objects to be identified:Cytoplasm
    Shrink smaller object prior to subtraction?:Yes

MeasureColocalization:[module_num:6|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notes:['Have to Check —>Beth mentioned something—>either have it at fastest or  have the Costes OFF']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
    Select images to measure:Actin, DNA, Mito
    Set threshold as percentage of maximum intensity for the images:15.0
    Select where to measure correlation:Within objects
    Select objects to measure:Nuclei, Cytoplasm, Cells
    Run all metrics?:Yes
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    Method for Costes thresholding:Faster

MeasureGranularity:[module_num:7|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
    Select images to measure:Actin, DNA, Mito
    Measure within objects?:Yes
    Select objects to measure:Nuclei, Cytoplasm, Cells
    Subsampling factor for granularity measurements:0.5
    Subsampling factor for background reduction:0.5
    Radius of structuring element:10
    Range of the granular spectrum:16

MeasureObjectIntensity:[module_num:8|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
    Select images to measure:Actin, DNA, Mito
    Select objects to measure:Nuclei, Cytoplasm, Cells

MeasureObjectNeighbors:[module_num:9|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
    Select objects to measure:Cells
    Select neighboring objects to measure:Cells
    Method to determine neighbors:Within a specified distance
    Neighbor distance:5
    Consider objects discarded for touching image border?:Yes
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
MeasureObjectNeighbors:[module_num:10|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
    Select objects to measure:Nuclei
    Select neighboring objects to measure:Nuclei
    Method to determine neighbors:Within a specified distance
    Neighbor distance:1
    Consider objects discarded for touching image border?:Yes
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
MeasureObjectNeighbors:[module_num:11|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
    Select objects to measure:Cells
    Select neighboring objects to measure:Cells
    Method to determine neighbors:Adjacent
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    Consider objects discarded for touching image border?:Yes
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
MeasureObjectIntensityDistribution:[module_num:12|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
    Select images to measure:Actin, DNA, Mito
    Hidden:3
    Hidden:1
    Hidden:0
    Calculate intensity Zernikes?:None
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    Select objects to measure:Nuclei
    Object to use as center?:These objects
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    Select objects to measure:Cytoplasm
    Object to use as center?:These objects
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    Select objects to measure:Cells
    Object to use as center?:These objects
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    Scale the bins?:Yes
    Number of bins:4
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
MeasureObjectSizeShape:[module_num:13|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
    Select object sets to measure:Cells, Nuclei, Cytoplasm
    Calculate the Zernike features?:Yes
    Calculate the advanced features?:No

MeasureTexture:[module_num:14|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
    Select images to measure:Actin, DNA, Mito
    Select objects to measure:Nuclei, Cytoplasm, Cells
    Enter how many gray levels to measure the texture at:256
    Hidden:3
    Measure whole images or objects?:Both
    Texture scale to measure:3
    Texture scale to measure:5
    Texture scale to measure:10

EnhanceOrSuppressFeatures:[module_num:15|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notes:['1/5 additional modules for special mitochondrial features', 'Enhances the neurite structure in the Mito image.']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
    Select the input image:Mito
    Name the output image:mito_tubeness
    Select the operation:Enhance
    Feature size:10
    Feature type:Neurites
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    Smoothing scale:1
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    Enhancement method:Tubeness
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    Rescale result image:Yes

Threshold:[module_num:16|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notes:['2/5 additional modules for special mitochondrial features', 'Thresholds the enhanced mito image']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
    Select the input image:mito_tubeness
    Name the output image:mito_bw
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:1.3488
    Threshold correction factor:1
    Lower and upper bounds on threshold:0,1
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    Log transform before thresholding?:No
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
MorphologicalSkeleton:[module_num:17|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notes:['3/5 additional modules for special mitochondrial features', 'Creates a skeleton from the thresholded mito image']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
    Select the input image:mito_bw
    Name the output image:mito_skel

MeasureObjectSkeleton:[module_num:18|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notes:['4/5 additional modules for special mitochondrial features', 'Measures the skeletonized mito image']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
    Select the seed objects:Nuclei
    Select the skeletonized image:mito_skel
    Retain the branchpoint image?:No
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    Fill small holes?:Yes
    Maximum hole size:10
    Export the skeleton graph relationships?:No
    Intensity image:None
    File output directory:Default Output Folder|
    Vertex file name:vertices.csv
    Edge file name:edges.csv

ImageMath:[module_num:19|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notes:['create a duplicate of mito_tubeness with new name to help label replicate of MeasureObjectIntensityDistribution']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
    Operation:None
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:No
    Set values greater than 1 equal to 1?:No
    Replace invalid values with 0?:No
    Ignore the image masks?:No
    Name the output image:mito_tubeness_CCN
    Image or measurement?:Image
    Select the first image:mito_tubeness
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
ImageMath:[module_num:20|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notes:['create a duplicate of mito_tubeness with new name to help label replicate of MeasureObjectIntensityDistribution']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
    Operation:None
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:No
    Set values greater than 1 equal to 1?:No
    Replace invalid values with 0?:No
    Ignore the image masks?:No
    Name the output image:mito_tubeness_CEN
    Image or measurement?:Image
    Select the first image:mito_tubeness
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
ImageMath:[module_num:21|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notes:['create a duplicate of mito_tubeness with new name to help label replicate of MeasureObjectIntensityDistribution']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
    Operation:None
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:No
    Set values greater than 1 equal to 1?:No
    Replace invalid values with 0?:No
    Ignore the image masks?:No
    Name the output image:mito_tubeness_C
    Image or measurement?:Image
    Select the first image:mito_tubeness
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
MeasureObjectIntensityDistribution:[module_num:22|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notes:['5/5 additional modules for special mitochondrial features', 'Measures the radial distribution of the enhanced mito image.']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
    Select images to measure:mito_tubeness_CCN
    Hidden:1
    Hidden:2
    Hidden:0
    Calculate intensity Zernikes?:None
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    Select objects to measure:Cells
    Object to use as center?:Centers of other objects
    Select objects to use as centers:Nuclei
    Scale the bins?:Yes
    Number of bins:16
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    Scale the bins?:Yes
    Number of bins:12
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
MeasureObjectIntensityDistribution:[module_num:23|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
    Select images to measure:mito_tubeness_CEN
    Hidden:1
    Hidden:2
    Hidden:0
    Calculate intensity Zernikes?:None
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    Select objects to measure:Cells
    Object to use as center?:Edges of other objects
    Select objects to use as centers:Nuclei
    Scale the bins?:Yes
    Number of bins:16
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    Scale the bins?:Yes
    Number of bins:12
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
MeasureObjectIntensityDistribution:[module_num:24|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
    Select images to measure:mito_tubeness_C
    Hidden:1
    Hidden:2
    Hidden:0
    Calculate intensity Zernikes?:None
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    Select objects to measure:Cells
    Object to use as center?:These objects
    Select objects to use as centers:Nuclei
    Scale the bins?:Yes
    Number of bins:16
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    Scale the bins?:Yes
    Number of bins:12
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
MeasureImageIntensity:[module_num:25|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notes:['Measures the ntensity of the whole image (AGP, BFHigh, BFLow, Brightfield, DNA, ER, Mito, RNA) as well as the intensity of the image only in regions without cells (* _BackgroundOnly).']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
    Select images to measure:Actin, DNA, Mito
    Measure the intensity only from areas enclosed by objects?:No
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    Calculate custom percentiles:No
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
OverlayOutlines:[module_num:26|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
    Display outlines on a blank image?:Yes
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    Name the output image:NucleiOutlines
    Outline display mode:Grayscale
    Select method to determine brightness of outlines:Max of image
    How to outline:Inner
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    Select objects to display:Nuclei

OverlayOutlines:[module_num:27|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
    Display outlines on a blank image?:Yes
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    Name the output image:CellOutlines
    Outline display mode:Grayscale
    Select method to determine brightness of outlines:Max of image
    How to outline:Inner
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    Select objects to display:Cells

SaveImages:[module_num:28|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
    Select the type of image to save:Image
    Select the image to save:NucleiOutlines
    Select method for constructing file names:Single name
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    Enter single file name:\g<SetName>_\g<ImageNumber>--nuclei_outlines
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    Saved file format:png
    Output file location:Default Output Folder sub-folder|outlines
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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    Save with lossless compression?:No

SaveImages:[module_num:29|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
    Select the type of image to save:Image
    Select the image to save:CellOutlines
    Select method for constructing file names:Single name
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    Enter single file name:\g<SetName>_\g<ImageNumber>--cell_outlines
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    Saved file format:png
    Output file location:Default Output Folder sub-folder|outlines
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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    Save with lossless compression?:No

ExportToSpreadsheet:[module_num:30|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notes:['']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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:Yes
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