CellProfiler Pipeline: http://www.cellprofiler.org
Version:3
DateRevision:20160302210837
GitHash:1b13225
ModuleCount:14
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:3
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression:^(?P<setname>[^\\\\.]+)\\\\s(?P<imnum>\\\\d+)_c(?P<ChannelNumber>[0-9]{1})
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    Extract metadata from:All images
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    Metadata extraction method:Extract from file/folder names
    Metadata source:Folder name
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    Regular expression:(?P<foldername>[^\\\\\\\\/]+)\\\\sMito_Morphology$
    Extract metadata from:All images
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    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression:^(?P<wafflename>waffle)(?P<wafflenum>\\\\d+)
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Match metadata:[{u'dapi': u'foldername', u'mito': u'foldername', u'waffleimage': None, u'actin': u'foldername'}, {u'dapi': u'setname', u'mito': u'setname', u'waffleimage': None, u'actin': u'setname'}, {u'dapi': u'imnum', u'mito': u'imnum', u'waffleimage': None, u'actin': u'imnum'}]
    Image set matching method:Metadata
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    Assignments count:4
    Single images count:0
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    Select the rule criteria:and (metadata does ChannelNumber "1")
    Name to assign these images:dapi
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does ChannelNumber "2")
    Name to assign these images:actin
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does ChannelNumber "3")
    Name to assign these images:mito
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does wafflenum "2")
    Name to assign these images:waffleimage
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:Yes
    grouping metadata count:1
    Metadata category:foldername

Morph:[module_num:5|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enabled:False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
    Select the input image:mito
    Name the output image:mito_morph
    Select the operation to perform:close
    Number of times to repeat operation:Once
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    Diameter:10
    Structuring element:Disk
    X offset:1.0
    Y offset:1.0
    Angle:0.0
    Width:3.0
    Height:3.0
    Custom:5,5,1111111111111111111111111
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
MeasureImageQuality:[module_num:6|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
    Calculate metrics for which images?:Select...
    Image count:1
    Scale count:1
    Threshold count:1
    Select the images to measure:dapi
    Include the image rescaling value?:Yes
    Calculate blur metrics?:Yes
    Spatial scale for blur measurements:120
    Calculate saturation metrics?:Yes
    Calculate intensity metrics?:Yes
    Calculate thresholds?:Yes
    Use all thresholding methods?:No
    Select a thresholding method:Otsu
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    Two-class or three-class thresholding?:Two classes
    Minimize the weighted variance or the entropy?:Weighted variance
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
MeasureImageQuality:[module_num:7|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
    Calculate metrics for which images?:Select...
    Image count:1
    Scale count:1
    Threshold count:1
    Select the images to measure:mito
    Include the image rescaling value?:Yes
    Calculate blur metrics?:Yes
    Spatial scale for blur measurements:15
    Calculate saturation metrics?:Yes
    Calculate intensity metrics?:Yes
    Calculate thresholds?:Yes
    Use all thresholding methods?:No
    Select a thresholding method:Otsu
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    Two-class or three-class thresholding?:Two classes
    Minimize the weighted variance or the entropy?:Weighted variance
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
Smooth:[module_num:8|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enabled:False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
    Select the input image:mito_morph
    Name the output image:mito_smooth
    Select smoothing method:Gaussian Filter
    Calculate artifact diameter automatically?:No
    Typical artifact diameter:20
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
IdentifyPrimaryObjects:[module_num:9|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enabled:False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
    Select the input image:dapi
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):70,130
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Name the outline image:NucleiOutlines
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Retain outlines of the identified objects?:Yes
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    Handling of objects if excessive number of objects identified:Continue
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    Threshold setting version:2
    Threshold strategy:Global
    Thresholding method:Otsu
    Select the smoothing method for thresholding:Automatic
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    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Minimize the weighted variance or the entropy?:Weighted variance
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
OverlayOutlines:[module_num:10|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enabled:False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
    Display outlines on a blank image?:No
    Select image on which to display outlines:dapi
    Name the output image:NucleiOverlay
    Outline display mode:Color
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    Width of outlines:1
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    Select outline color:Red
    Load outlines from an image or objects?:Objects
    Select objects to display:Nuclei

DisplayDataOnImage:[module_num:11|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enabled:False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
    Display object or image measurements?:Object
    Select the input objects:Nuclei
    Measurement to display:Number_Object_Number
    Select the image on which to display the measurements:NucleiOverlay
    Text color:yellow
    Name the output image that has the measurements displayed:CountNuclei
    Font size (points):12
    Number of decimals:0
    Image elements to save:Image
    Annotation offset (in pixels):0
    Display mode:Text
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    Display background image?:Yes
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
SaveImages:[module_num:12|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enabled:False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
    Select the type of image to save:Image
    Select the image to save:CountNuclei
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    Select method for constructing file names:From image filename
    Select image name for file prefix:actin
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_CountNuclei_\\\\g<imnum>
    Saved file format:png
    Output file location:Default Output Folder sub-folder|images
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Rescale the images? :No
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    Select colormap:Spectral
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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
ExportToSpreadsheet:[module_num:13|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Limit output to a size that is allowed in Excel?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:qc_
    Overwrite existing files without warning?:Yes
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
CreateBatchFiles:[module_num:14|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enabled:False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
    Store batch files in default output folder?:Yes
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    Are the cluster computers running Windows?:No
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    Launch BatchProfiler:No
